PsychoPy2experiment version="2022.2.5"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['name'], expName, expInfo['date'])
  Experiment info = {'name': '', 'ID': '', 'gender': '', 'age': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['images/target/money_1.jpg', 'images/target/money_2.jpg', 'images/target/money_3.jpg', 'images/target/money_4.jpg', 'images/target/money_5.jpg', 'images/target/money_6.jpg', 'images/target/money_7.jpg', 'images/target/money_8.jpg', 'images/target/money_9.jpg', 'images/target/money_10.jpg', 'images/target/money_11.jpg', 'images/target/money_12.jpg', 'images/target/money_13.jpg', 'images/target/money_14.jpg', 'images/target/money_15.jpg', 'images/target/money_16.jpg', 'images/target/money_17.jpg', 'images/target/money_18.jpg', 'images/target/money_19.jpg', 'images/target/money_20.jpg', 'images/target/money_21.jpg', 'images/target/money_22.jpg', 'images/target/money_23.jpg', 'images/target/money_24.jpg', 'images/target/money_25.jpg', 'images/target/money_26.jpg', 'images/target/money_27.jpg', 'images/target/money_28.jpg', 'images/target/money_29.jpg', 'images/target/money_30.jpg', 'images/target/money_31.jpg', 'images/target/money_32.jpg', 'images/target/no-money_1.jpg', 'images/target/no-money_2.jpg', 'images/target/no-money_3.jpg', 'images/target/no-money_4.jpg', 'images/target/no-money_5.jpg', 'images/target/no-money_6.jpg', 'images/target/no-money_7.jpg', 'images/target/no-money_8.jpg', 'images/target/no-money_9.jpg', 'images/target/no-money_10.jpg', 'images/target/no-money_11.jpg', 'images/target/no-money_12.jpg', 'images/target/no-money_13.jpg', 'images/target/no-money_14.jpg', 'images/target/no-money_15.jpg', 'images/target/no-money_16.jpg', 'images/target/no-money_17.jpg', 'images/target/no-money_18.jpg', 'images/target/no-money_19.jpg', 'images/target/no-money_20.jpg', 'images/target/no-money_21.jpg', 'images/target/no-money_22.jpg', 'images/target/no-money_23.jpg', 'images/target/no-money_24.jpg', 'images/target/no-money_25.jpg', 'images/target/no-money_26.jpg', 'images/target/no-money_27.jpg', 'images/target/no-money_28.jpg', 'images/target/no-money_29.jpg', 'images/target/no-money_30.jpg', 'images/target/no-money_33.jpg', 'images/target/no-money_34.jpg', 'images/target/no-smile_1.jpg', 'images/target/no-smile_2.jpg', 'images/target/no-smile_3.jpg', 'images/target/no-smile_4.jpg', 'images/target/no-smile_5.jpg', 'images/target/no-smile_6.jpg', 'images/target/no-smile_7.jpg', 'images/target/no-smile_8.jpg', 'images/target/no-smile_9.jpg', 'images/target/no-smile_10.jpg', 'images/target/no-smile_11.jpg', 'images/target/no-smile_12.jpg', 'images/target/no-smile_13.jpg', 'images/target/no-smile_14.jpg', 'images/target/no-smile_15.jpg', 'images/target/no-smile_16.jpg', 'images/target/no-smile_17.jpg', 'images/target/no-smile_18.jpg', 'images/target/no-smile_19.jpg', 'images/target/no-smile_20.jpg', 'images/target/no-smile_21.jpg', 'images/target/no-smile_22.jpg', 'images/target/no-smile_23.jpg', 'images/target/no-smile_24.jpg', 'images/target/no-smile_25.jpg', 'images/target/no-smile_26.jpg', 'images/target/no-smile_27.jpg', 'images/target/no-smile_28.jpg', 'images/target/no-smile_29.jpg', 'images/target/no-smile_30.jpg', 'images/target/no-smile_32.jpg', 'images/target/no-smile_33.jpg', 'images/target/smile_1.jpg', 'images/target/smile_2.jpg', 'images/target/smile_3.jpg', 'images/target/smile_4.jpg', 'images/target/smile_5.jpg', 'images/target/smile_6.jpg', 'images/target/smile_7.jpg', 'images/target/smile_8.jpg', 'images/target/smile_9.jpg', 'images/target/smile_10.jpg', 'images/target/smile_11.jpg', 'images/target/smile_12.jpg', 'images/target/smile_13.jpg', 'images/target/smile_14.jpg', 'images/target/smile_15.jpg', 'images/target/smile_16.jpg', 'images/target/smile_17.jpg', 'images/target/smile_18.jpg', 'images/target/smile_19.jpg', 'images/target/smile_20.jpg', 'images/target/smile_21.jpg', 'images/target/smile_22.jpg', 'images/target/smile_23.jpg', 'images/target/smile_24.jpg', 'images/target/smile_25.jpg', 'images/target/smile_26.jpg', 'images/target/smile_27.jpg', 'images/target/smile_28.jpg', 'images/target/smile_29.jpg', 'images/target/smile_30.jpg', 'images/target/smile_31.jpg', 'images/target/smile_34.jpg', 'images/SID_neutral_2/1_1.jpg', 'images/SID_neutral_2/1_2.jpg', 'images/SID_neutral_2/1_3.jpg', 'images/SID_neutral_2/1_4.jpg', 'images/SID_neutral_2/1_5.jpg', 'images/SID_neutral_2/1_6.jpg', 'images/SID_neutral_2/1_7.jpg', 'images/SID_neutral_2/1_8.jpg', 'images/SID_neutral_2/1_9.jpg', 'images/SID_neutral_2/1_10.jpg', 'images/SID_neutral_2/1_11.jpg', 'images/SID_neutral_2/1_12.jpg', 'images/SID_neutral_2/1_13.jpg', 'images/SID_neutral_2/1_14.jpg', 'images/SID_neutral_2/1_15.jpg', 'images/SID_neutral_2/1_16.jpg', 'images/SID_neutral_1/1_17.jpg', 'images/SID_neutral_1/1_18.jpg', 'images/SID_neutral_1/1_19.jpg', 'images/SID_neutral_1/1_20.jpg', 'images/SID_neutral_1/1_21.jpg', 'images/SID_neutral_1/1_22.jpg', 'images/SID_neutral_1/1_23.jpg', 'images/SID_neutral_1/1_24.jpg', 'images/SID_neutral_1/1_25.jpg', 'images/SID_neutral_1/1_26.jpg', 'images/SID_neutral_1/1_27.jpg', 'images/SID_neutral_1/1_28.jpg', 'images/SID_neutral_1/1_29.jpg', 'images/SID_neutral_1/1_30.jpg', 'images/SID_neutral_1/1_31.jpg', 'images/SID_neutral_1/1_32.jpg', 'images/SID_neutral/1_1.jpg', 'images/SID_neutral/1_2.jpg', 'images/SID_neutral/1_3.jpg', 'images/SID_neutral/1_4.jpg', 'images/SID_neutral/1_5.jpg', 'images/SID_neutral/1_6.jpg', 'images/SID_neutral/1_7.jpg', 'images/SID_neutral/1_8.jpg', 'images/SID_neutral/1_9.jpg', 'images/SID_neutral/1_10.jpg', 'images/SID_neutral/1_11.jpg', 'images/SID_neutral/1_12.jpg', 'images/SID_neutral/1_13.jpg', 'images/SID_neutral/1_14.jpg', 'images/SID_neutral/1_15.jpg', 'images/SID_neutral/1_16.jpg', 'images/SID_neutral/1_17.jpg', 'images/SID_neutral/1_18.jpg', 'images/SID_neutral/1_19.jpg', 'images/SID_neutral/1_20.jpg', 'images/SID_neutral/1_21.jpg', 'images/SID_neutral/1_22.jpg', 'images/SID_neutral/1_23.jpg', 'images/SID_neutral/1_24.jpg', 'images/SID_neutral/1_25.jpg', 'images/SID_neutral/1_26.jpg', 'images/SID_neutral/1_27.jpg', 'images/SID_neutral/1_28.jpg', 'images/SID_neutral/1_29.jpg', 'images/SID_neutral/1_30.jpg', 'images/SID_neutral/1_31.jpg', 'images/SID_neutral/1_32.jpg', 'images/SID_neutral/1_34.jpg', 'images/SID/1.jpg', 'images/SID/2.jpg', 'images/SID/3.jpg', 'images/SID/4.jpg', 'images/SID/5.jpg', 'images/SID/6.jpg', 'images/SID/7.jpg', 'images/SID/8.jpg', 'images/SID/9.jpg', 'images/SID/10.jpg', 'images/SID/11.jpg', 'images/SID/12.jpg', 'images/SID/13.jpg', 'images/SID/14.jpg', 'images/SID/15.jpg', 'images/SID/16.jpg', 'images/SID/17.jpg', 'images/SID/18.jpg', 'images/SID/19.jpg', 'images/SID/20.jpg', 'images/SID/21.jpg', 'images/SID/22.jpg', 'images/SID/23.jpg', 'images/SID/24.jpg', 'images/SID/25.jpg', 'images/SID/26.jpg', 'images/SID/27.jpg', 'images/SID/28.jpg', 'images/SID/29.jpg', 'images/SID/30.jpg', 'images/SID/31.jpg', 'images/SID/32.jpg', 'images/SID/pra.jpg', 'images/shouyin/1_1.jpg', 'images/shouyin/1_2.jpg', 'images/shouyin/1_3.jpg', 'images/shouyin/feedback1_1.jpg', 'images/shouyin/feedback1_2.jpg', 'images/jinyin/no/feedback2_1.jpg', 'images/jinyin/no/feedback2_2.jpg', 'images/jinyin/no/feedback2_3.jpg', 'images/jinyin/2_1.jpg', 'images/jinyin/2_2.jpg', 'images/jinyin/2_3.jpg', 'images/jinyin/feedback2_1.jpg', 'images/jinyin/feedback2_2.jpg', 'images/jinyin/feedback2_3.jpg', 'images/jinyin/smile.jpg', 'images/feedback/reward_fe/feedback1_1.jpg', 'images/feedback/reward_fe/pra.jpg', 'images/feedback/no_reward_fe/feedback1_2.jpg', 'images/feedback/no_reward_fe/feedback2_2.bmp', 'images/cue/reward-condition/cue1_1.jpg', 'images/cue/reward-condition/cue2_1.jpg', 'images/cue/no-reward/cue1_2.jpg', 'images/cue/no-reward/cue2_2.jpg', 'instruction/alarm.jpg', 'instruction/ending.jpg', 'instruction/failpractice.bmp', 'instruction/instruction1.jpg', 'instruction/MID_instru.jpg', 'instruction/neg_con_rest.jpg', 'instruction/practice.jpg', 'instruction/prepare.jpg', 'instruction/rate_end.jpg', 'instruction/rest.jpg', 'instruction/SID_instru.jpg', 'instruction/succprac.png', 'instruction/toSlow.jpg', 'practice/pra_images/1_1.jpg', 'practice/pra_images/1_2.jpg', 'practice/pra_images/1_3.jpg', 'practice/pra_images/1_4.jpg', 'practice/pra_images/1_5.jpg', 'practice/pra_images/1_6.jpg']
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  color = $[0.506,0.506,0.506]
  expName = MID&SID day1-encode
  keyboardBackend = ioHub
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Routines
  Routine prep
    ImageComponent prep_image
      image = instruction/prepare.jpg
      size = (960, 720)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent define
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pra_encode
    PolygonComponent fixation1_1
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent pra_code
      Code Type = Auto->JS
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      Begin Routine:
        if trial_type==1 or trial_type==2: #社会奖赏条件
            cue_path = mon_condition
        if trial_type==3 or trial_type==4: #无社会奖赏条件
            cue_path = mon_no_condition
    ImageComponent cue
      image [set every repeat] = $cue_path
      mask = none
      size = (920, 720)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.5
      units = pix
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    PolygonComponent fixation1_2
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.5
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    ImageComponent pra_target
      image [set every repeat] = $pra_images2
      mask = none
      size = (300, 300)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 2.0
      units = pix
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    KeyboardComponent response
      allowedKeys [set every repeat] = "f","j"
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 2.0
      storeCorrect = True
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  Routine pra_feedback
    PolygonComponent fix1
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
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    CodeComponent setMsg
      Code Type = Auto->JS
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      Begin Routine:
        if trial_type==1 or trial_type==2:
            prafeedback_path = mon_feedback
        if trial_type==3 or trial_type==4:
            prafeedback_path = mon_no_feedback
    ImageComponent image
      image [set every repeat] = $prafeedback_path
      mask = none
      size = (920, 720)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 1.5
      units = pix
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  Routine thanks
    ImageComponent end
      image = instruction/rate_end.jpg
      mask = none
      size = (960, 720)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = pix
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    KeyboardComponent the_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine interval
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        if notpress >= 4:
            inter_image = 'instruction/failpractice.bmp'
        else:
            inter_image = 'instruction/practice.jpg'
      Each Frame:
        if trialNum == 6:
            continueRoutine = True
        else:
            continueRoutine = False
        if notpress >= 4:
            inter_image = 'instruction/failpractice.bmp'
        else:
            inter_image = 'instruction/practice.jpg'
      End Routine:
        if trialNum == 6 and notpress <= 4:
            MIDprac_loop.finished = True
    ImageComponent image_2
      image = instruction/practice.jpg
      mask = none
      size = (920, 720)
      startVal [time (s)] = 0
      units = pix
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pra_ITI
    TextComponent pra_fix_ITI
      durationEstim = 2.0
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random () +1.5
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  Routine MID1_encode
    PolygonComponent fixation2_1
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent pra_code_2
      Code Type = Auto->JS
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      Begin Routine:
        if trial_type==1 or trial_type==2: #金钱奖赏条件
              cue_path=mon_condition
        if trial_type==3 or trial_type==4: #无金钱奖赏条件
              cue_path=mon_no_condition
        if trial_type==5 or trial_type==6: #社会奖赏条件
              cue_path=soci_condition
        if trial_type==7 or trial_type==8: #无社会奖赏条件
              cue_path=soci_no_condition
    ImageComponent cue_2
      image [set every repeat] = $cue_path
      mask = none
      size = (920, 720)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.5
      units = pix
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    PolygonComponent fixation2_2
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.5
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    ImageComponent formal_target
      image [set every repeat] = $images
      mask = none
      size = (300, 300)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 2.0
      units = pix
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    KeyboardComponent response2
      allowedKeys [set every repeat] = "f","j"
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 2
      storeCorrect = True
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    CodeComponent MID1
      Code Type = Auto->JS
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      Begin Experiment:
        pressIndex = 1
      Begin Routine:
        alarm = False
      Each Frame:
        if pressIndex == 1:
            warn.status = FINISHED
        else:
            alarm = True
      End Routine:
        pressIndex = 1
    ImageComponent slow
      image = $'instruction'+'/'+'toSlow.jpg'
      size = (960, 720)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 2
      units = pix
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    ImageComponent warn
      image = $'instruction'+'/'+'alarm.jpg'
      mask = none
      size = (960, 720)
      startVal [condition] = $alarm
      stopVal [duration (s)] = 2
      units = pix
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  Routine MID1_feedback
    PolygonComponent fixation2_3
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
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    CodeComponent setMsg_2
      Code Type = Auto->JS
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      Begin Routine:
        if corrAns == 'f':
            if trial_type==1:
                if response2.corr==1:
                    feedback_path = mon_feedback
            elif trial_type==3:
                if response2.corr==1:
                    feedback_path = mon_no_feedback
        if response2.corr==0:
            feedback_path = mon_no_feedback

        if corrAns == 'j':
            if trial_type==2:
                if response2.corr==1:
                    feedback_path = mon_feedback
            elif trial_type==4:
                if response2.corr==1:
                    feedback_path = mon_no_feedback
        if response2.corr==0:
            feedback_path = mon_no_feedback
      Each Frame:
        if response2.keys:
            continueRoutine = True
        else:
            continueRoutine = False
    ImageComponent formal_fe
      image [set every repeat] = $feedback_path
      mask = none
      size = (920, 720)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 1.5
      units = pix
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  Routine MID1_ITI
    TextComponent fix_ITI
      durationEstim = 2.0
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random () +1.5
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  Routine SID1_encode
    PolygonComponent fixation2
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent pra_code_3
      Code Type = Auto->JS
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      Begin Routine:
        if trial_type==5 or trial_type==6: #社会奖赏条件
              cue_path=soci_condition
        if trial_type==7 or trial_type==8: #无社会奖赏条件
              cue_path=soci_no_condition
    ImageComponent cue_3
      image [set every repeat] = $cue_path
      mask = none
      size = (920, 720)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.5
      units = pix
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    PolygonComponent fixation2_4
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.5
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    ImageComponent formal_target_2
      image [set every repeat] = $images
      mask = none
      size = (300, 300)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 2.0
      units = pix
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    KeyboardComponent response2_2
      allowedKeys [set every repeat] = "f","j"
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 2
      storeCorrect = True
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    CodeComponent SID1
      Code Type = Auto->JS
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      Begin Experiment:
        pressIndex = 1
      Begin Routine:
        alarm = False
      Each Frame:
        if pressIndex == 1:
            SID_warn.status = FINISHED
        else:
            alarm = True
      End Routine:
        pressIndex = 1
    ImageComponent SID_slow
      image = $'instruction'+'/'+'toSlow.jpg'
      mask = none
      size = (960, 720)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 2
      units = pix
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    ImageComponent SID_warn
      image = $'instruction'+'/'+'alarm.jpg'
      mask = none
      size = (960, 720)
      startVal [condition] = $alarm
      stopVal [duration (s)] = 2
      units = pix
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  Routine SID1_feedback
    PolygonComponent fix_SID1
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        if response2_2.corr==1:
            feed_path1=feed
        if response2_2.corr==0:
            feed_path1=no_reward
      Each Frame:
        if response2_2.keys:
            continueRoutine = True
        else:
            continueRoutine = False
    ImageComponent SID_feed1
      image [set every repeat] = $feed_path1
      mask = none
      size = (960, 720)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 1.5
      units = pix
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  Routine SID1_ITI
    TextComponent fix_ITI_2
      durationEstim = 2.0
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random () +1.5
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  Routine MID2_ITI
    TextComponent fix_ITI_3
      durationEstim = 1.5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random () +1
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  Routine MID1_instru
    ImageComponent MID1_inst
      image = instruction/MID_instru.jpg
      mask = none
      size = (960, 720)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = pix
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    KeyboardComponent enter1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SID1_instru
    ImageComponent SID1_instr
      image = instruction/SID_instru.jpg
      mask = none
      size = (960, 720)
      startVal [time (s)] = 0
      units = pix
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    KeyboardComponent enter2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine MID1_rest
    ImageComponent rest
      image = instruction/rest.jpg
      mask = none
      size = (960,720)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
      units = pix
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  Routine SID_rest
    ImageComponent rest_2
      image = instruction/rest.jpg
      mask = none
      size = (960,720)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
      units = pix
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  Routine MID2_instr
    ImageComponent MID1_inst_2
      image = instruction/MID_instru.jpg
      mask = none
      size = (960, 720)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = pix
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    KeyboardComponent enter1_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine MID2_encode
    PolygonComponent fixation2_6
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent pra_code_4
      Code Type = Auto->JS
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      Begin Routine:
        if trial_type==1 or trial_type==2: #金钱奖赏条件
              cue_path=mon_condition
        if trial_type==3 or trial_type==4: #无金钱奖赏条件
              cue_path=mon_no_condition
        if trial_type==5 or trial_type==6: #社会奖赏条件
              cue_path=soci_condition
        if trial_type==7 or trial_type==8: #无社会奖赏条件
              cue_path=soci_no_condition
    ImageComponent cue_4
      image [set every repeat] = $cue_path
      mask = none
      size = (920, 720)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.5
      units = pix
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    PolygonComponent fixation2_7
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.5
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    ImageComponent formal_target_3
      image [set every repeat] = $images
      mask = none
      size = (300, 300)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 2.0
      units = pix
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    KeyboardComponent response2_3
      allowedKeys [set every repeat] = "f","j"
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 2
      storeCorrect = True
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    CodeComponent MID2
      Code Type = Auto->JS
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      Begin Experiment:
        pressIndex = 1
      Begin Routine:
        alarm = False
      Each Frame:
        if pressIndex == 1:
            MID2_warn.status = FINISHED
        else:
            alarm = True
      End Routine:
        pressIndex = 1
    ImageComponent MID2_slow
      image = $'instruction'+'/'+'toSlow.jpg'
      mask = none
      size = (960, 720)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 2
      units = pix
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    ImageComponent MID2_warn
      image = $'instruction'+'/'+'alarm.jpg'
      mask = none
      size = (960, 720)
      startVal [condition] = $alarm
      stopVal [duration (s)] = 2
      units = pix
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  Routine MID2_feed
    PolygonComponent MID2_polygon
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
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    CodeComponent setMsg_4
      Code Type = Auto->JS
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      Begin Routine:
        if corrAns == 'f':
            if trial_type==1:
                if response2_3.corr==1:
                    feedback_path2 = mon_feedback
            elif trial_type==3:
                if response2_3.corr==1:
                    feedback_path2 = mon_no_feedback
        if response2_3.corr==0:
            feedback_path2 = mon_no_feedback

        if corrAns == 'j':
            if trial_type==2:
                if response2_3.corr==1:
                    feedback_path2 = mon_feedback
            elif trial_type==4:
                if response2_3.corr==1:
                    feedback_path2 = mon_no_feedback
        if response2_3.corr==0:
            feedback_path2 = mon_no_feedback
      Each Frame:
        if response2_3.keys:
            continueRoutine = True
        else:
            continueRoutine = False
    ImageComponent formal_fe_3
      image [set every repeat] = $feedback_path2
      mask = none
      size = (920, 720)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 1.5
      units = pix
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  Routine MID2_ITI_2
    TextComponent fix_ITI_4
      durationEstim = 2.0
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random () +1.5
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  Routine REST3
    ImageComponent rest_3
      image = instruction/rest.jpg
      mask = none
      size = (960,720)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
      units = pix
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  Routine shou_encd
    PolygonComponent fixation2_12
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent pra_code_6
      Code Type = Auto->JS
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      Begin Routine:
        if trial_type==1 or trial_type==2: #金钱奖赏条件
              cue_path=mon_condition
        if trial_type==3 or trial_type==4: #无金钱奖赏条件
              cue_path=mon_no_condition
        if trial_type==5 or trial_type==6: #社会奖赏条件
              cue_path=soci_condition
        if trial_type==7 or trial_type==8: #无社会奖赏条件
              cue_path=soci_no_condition
    ImageComponent cue_6
      image [set every repeat] = $cue_path
      mask = none
      size = (920, 720)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.5
      units = pix
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    PolygonComponent fixation2_13
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.5
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    ImageComponent formal_target_5
      image [set every repeat] = $images
      mask = none
      size = (300, 300)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 2.0
      units = pix
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    KeyboardComponent response2_5
      allowedKeys [set every repeat] = "f","j"
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 2
      storeCorrect = True
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    CodeComponent shou
      Code Type = Auto->JS
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      Begin Experiment:
        pressIndex = 1
      Begin Routine:
        alarm = False
      Each Frame:
        if pressIndex == 1:
            warn_slow.status = FINISHED
        else:
            alarm = True
      End Routine:
        pressIndex = 1
    ImageComponent slow_shou
      image = $'instruction'+'/'+'toSlow.jpg'
      mask = none
      size = (960, 720)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 2
      units = pix
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    ImageComponent warn_slow
      image = $'instruction'+'/'+'alarm.jpg'
      mask = none
      size = (960, 720)
      startVal [condition] = $alarm
      stopVal [duration (s)] = 2
      units = pix
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  Routine shouITI
    TextComponent fix_ITI_6
      durationEstim = 2.0
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random () +1.5
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  Routine shou_feed
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if corrAns == 'f':
            if trial_type==1:
                if response2_6.corr==1:
                    feedback = mon_feedback
            elif trial_type==3:
                if response2_6.corr==1:
                    feedback = mon_no_feedback
        if response2_6.corr==0:
            feedback = mon_no_feedback

        if corrAns == 'j':
            if trial_type==2:
                if response2_6.corr==1:
                    feedback = mon_feedback
            elif trial_type==4:
                if response2_6.corr==1:
                    feedback = mon_no_feedback
        if response2_6.corr==0:
            feedback = mon_no_feedback
      Each Frame:
        if response2_5.keys:
            continueRoutine = True
        else:
            continueRoutine = False
    PolygonComponent shou_polygon
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
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    ImageComponent formal_fe_2
      image [set every repeat] = $feedback
      mask = none
      size = (920, 720)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 1.5
      units = pix
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  Routine jin_encd
    PolygonComponent fixation2_15
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent pra_code_7
      Code Type = Auto->JS
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      Begin Routine:
        if trial_type==1 or trial_type==2: #金钱奖赏条件
              cue_path=mon_condition
        if trial_type==3 or trial_type==4: #无金钱奖赏条件
              cue_path=mon_no_condition
        if trial_type==5 or trial_type==6: #社会奖赏条件
              cue_path=soci_condition
        if trial_type==7 or trial_type==8: #无社会奖赏条件
              cue_path=soci_no_condition
    ImageComponent cue_7
      image [set every repeat] = $cue_path
      mask = none
      size = (920, 720)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.5
      units = pix
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    PolygonComponent fixation2_16
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.5
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    ImageComponent formal_target_6
      image [set every repeat] = $images
      mask = none
      size = (300, 300)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 2.0
      units = pix
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    KeyboardComponent response2_6
      allowedKeys [set every repeat] = "f","j"
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 2
      storeCorrect = True
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    CodeComponent jin
      Code Type = Auto->JS
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      Begin Experiment:
        pressIndex = 1
      Begin Routine:
        alarm = False
      Each Frame:
        if pressIndex == 1:
            jin_warn.status = FINISHED
        else:
            alarm = True
      End Routine:
        pressIndex = 1
    ImageComponent jin_slow
      image = $'instruction'+'/'+'toSlow.jpg'
      mask = none
      size = (960, 720)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 2
      units = pix
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    ImageComponent jin_warn
      image = $'instruction'+'/'+'alarm.jpg'
      mask = none
      size = (960, 720)
      startVal [condition] = $alarm
      stopVal [duration (s)] = 2
      units = pix
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  Routine jin_feed
    PolygonComponent JIN_polygon
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
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    CodeComponent setMsg_6
      Code Type = Auto->JS
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      Begin Routine:
        if response2_6.corr==1:
            feed_path3=fee
        if response2_6.corr==0:
            feed_path3=no_re
      Each Frame:
        if response2_6.keys:
            continueRoutine = True
        else:
            continueRoutine = False
    ImageComponent formal_fe_5
      image [set every repeat] = $feed_path3
      mask = none
      size = (920, 720)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 1.5
      units = pix
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  Routine jinITI
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  Routine SID2_instr
    ImageComponent SID1_instr_2
      image = instruction/SID_instru.jpg
      mask = none
      size = (960, 720)
      startVal [time (s)] = 0
      units = pix
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    KeyboardComponent enter2_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine SID2_enc
    PolygonComponent fixation2_5
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent pra_code_5
      Code Type = Auto->JS
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      Begin Routine:
        if trial_type==5 or trial_type==6: #社会奖赏条件
              cue_path=soci_condition
        if trial_type==7 or trial_type==8: #无社会奖赏条件
              cue_path=soci_no_condition
    ImageComponent cue_5
      image [set every repeat] = $cue_path
      mask = none
      size = (920, 720)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.5
      units = pix
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    PolygonComponent fixation2_8
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.5
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    ImageComponent formal_target_4
      image [set every repeat] = $images
      mask = none
      size = (300, 300)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 2.0
      units = pix
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    KeyboardComponent response2_4
      allowedKeys [set every repeat] = "f","j"
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 2
      storeCorrect = True
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    CodeComponent SID2
      Code Type = Auto->JS
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      Begin Experiment:
        pressIndex = 1
      Begin Routine:
        alarm = False
      Each Frame:
        if pressIndex == 1:
            SID2_warn.status = FINISHED
        else:
            alarm = True
      End Routine:
        pressIndex = 1
    ImageComponent SID2_slow
      image = $'instruction'+'/'+'toSlow.jpg'
      mask = none
      size = (960, 720)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 2
      units = pix
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    ImageComponent SID2_warn
      image = $'instruction'+'/'+'alarm.jpg'
      mask = none
      size = (960, 720)
      startVal [condition] = $alarm
      stopVal [duration (s)] = 2
      units = pix
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  Routine SID2_fee
    PolygonComponent fix_SID1_2
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        if response2_4.corr==1:
            feed_path2=feed
        if response2_4.corr==0:
            feed_path2=no_reward
      Each Frame:
        if response2_4.keys:
            continueRoutine = True
        else:
            continueRoutine = False
    ImageComponent SID_feed1_2
      image [set every repeat] = $feed_path2
      mask = none
      size = (960, 720)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 1.5
      units = pix
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  Routine SID2_ITI
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  Routine MID_pra
    ImageComponent instr
      image = instruction/instruction1.jpg
      mask = none
      size = (960, 720)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = pix
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    KeyboardComponent enter
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent MID
      Code Type = Auto->JS
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      Begin Experiment:
        mon_condition = 'images'+'/'+'cue'+'/'+'reward-condition'+'/'+'cue1_1.jpg'
        mon_no_condition = 'images'+'/'+'cue'+'/'+'no-reward'+'/'+'cue1_2.jpg'
        mon_feedback = 'images'+'/'+'feedback'+'/'+'reward_fe'+'/'+'feedback1_1.jpg'
        mon_no_feedback = 'images'+'/'+'feedback'+'/'+'no_reward_fe'+'/'+'feedback1_2.jpg'
        warning = 'instruction' + '/' + 'warning.bmp'
        notpress=0
  Routine SID_pra
    ImageComponent instr_2
      image = instruction/instruction1.jpg
      mask = none
      size = (960, 720)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = pix
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    KeyboardComponent enter_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent SID
      Code Type = Auto->JS
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      Begin Experiment:
        #定义reward-condition/no-reward的路径
        sub_id = expInfo['ID']

        soci_condition = 'images'+'/'+'cue'+'/'+'reward-condition'+'/'+'cue2_1.jpg'
        soci_no_condition = 'images'+'/'+'cue'+'/'+'no-reward'+'/'+'cue2_2.jpg'
        soci_no_feedback = 'images'+'/'+'feedback'+'/'+'no_reward_fe'+'/'+'feedback2_2.bmp'
        soci_feedback = 'images'+'/'+'feedback'+'/'+'reward_fe'+'/'+'pra.jpg'

        warning = 'instruction' + '/' + 'warning.bmp'
        notpress=0
  Routine Spra_encode
    PolygonComponent fixation1
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent pra_code_8
      Code Type = Auto->JS
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      Begin Routine:
        if trial_type==5 or trial_type==6: #社会奖赏条件
            cue_path = soci_condition
        if trial_type==7 or trial_type==8: #无社会奖赏条件
            cue_path = soci_no_condition
    ImageComponent cue_8
      image [set every repeat] = $cue_path
      mask = none
      size = (920, 720)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.5
      units = pix
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    PolygonComponent fixation1_3
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.5
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    ImageComponent pra_target_2
      image [set every repeat] = $pra_images1
      mask = none
      size = (300, 300)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 2.0
      units = pix
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    KeyboardComponent response_2
      allowedKeys [set every repeat] = "f","j"
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 2.0
      storeCorrect = True
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  Routine Spra_feedback
    PolygonComponent fix1_2
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
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    CodeComponent setMsg_3
      Code Type = Auto->JS
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      Begin Routine:
        if trial_type==5 or trial_type==6:
            praSIDfeed_path = soci_feedback
        if trial_type==7 or trial_type==8:
            praSIDfeed_path = soci_no_feedback
    ImageComponent image_3
      image [set every repeat] = $praSIDfeed_path
      mask = none
      size = (920, 720)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 1.5
      units = pix
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  Routine Spra_ITI
    TextComponent pra_fix_ITI_2
      durationEstim = 2.0
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random () +1.5
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  Routine S_interval
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if notpress >= 4:
            inter_image = 'instruction/failpractice.bmp'
        else:
            inter_image = 'instruction/practice.jpg'
      Each Frame:
        if trialNum == 6:
            continueRoutine = True
        else:
            continueRoutine = False
        if notpress >= 4:
            inter_image = 'instruction/failpractice.bmp'
        else:
            inter_image = 'instruction/practice.jpg'
      End Routine:
        if trialNum == 6 and notpress <= 4:
            SIDprac_loop.finished = True
    ImageComponent image_4
      image = instruction/practice.jpg
      mask = none
      size = (920, 720)
      startVal [time (s)] = 0
      units = pix
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine prep
  Routine MID_pra
  LoopInitiator MIDprac_loop loopType="TrialHandler"
    conditionsFile = practice/pra_MID.xlsx
    loopType = sequential
    nReps = 999
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    conditions:
      [{'trialNum': 1, 'trial_type': 1, 'pra_images2': 'practice/pra_images/1_1.jpg', 'corrAns': 'f'},
      {'trialNum': 2, 'trial_type': 2, 'pra_images2': 'practice/pra_images/1_2.jpg', 'corrAns': 'f'},
      {'trialNum': 3, 'trial_type': 3, 'pra_images2': 'practice/pra_images/1_3.jpg', 'corrAns': 'j'},
      {'trialNum': 4, 'trial_type': 4, 'pra_images2': 'practice/pra_images/1_4.jpg', 'corrAns': 'j'},
      {'trialNum': 5, 'trial_type': 1, 'pra_images2': 'practice/pra_images/1_5.jpg', 'corrAns': 'j'},
      {'trialNum': 6, 'trial_type': 2, 'pra_images2': 'practice/pra_images/1_6.jpg', 'corrAns': 'f'}]
    Routine pra_encode
    Routine pra_feedback
    Routine pra_ITI
    Routine interval
  LoopTerminator MIDprac_loop
  Routine MID1_instru
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = shouyin.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'trialNum': 1, 'trial_type': 1, 'images': 'images/shouyin/1_1.jpg', 'corrAns': 'f', 'feedback': 'images/shouyin/feedback1_1.jpg'},
      {'trialNum': 2, 'trial_type': 3, 'images': 'images/shouyin/1_2.jpg', 'corrAns': 'f', 'feedback': 'images/shouyin/feedback1_2.jpg'},
      {'trialNum': 3, 'trial_type': 2, 'images': 'images/shouyin/1_3.jpg', 'corrAns': 'j', 'feedback': 'images/shouyin/feedback1_1.jpg'}]
    Routine shou_encd
    Routine shou_feed
    Routine shouITI
  LoopTerminator trials
  LoopInitiator MID1_trials loopType="TrialHandler"
    conditionsFile = MID1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'trialNum': 1, 'trial_type': 1, 'images': 'images/target/money_1.jpg', 'corrAns': 'f'},
      {'trialNum': 2, 'trial_type': 1, 'images': 'images/target/money_2.jpg', 'corrAns': 'f'},
      {'trialNum': 3, 'trial_type': 1, 'images': 'images/target/money_3.jpg', 'corrAns': 'f'},
      {'trialNum': 4, 'trial_type': 1, 'images': 'images/target/money_4.jpg', 'corrAns': 'f'},
      {'trialNum': 5, 'trial_type': 1, 'images': 'images/target/money_5.jpg', 'corrAns': 'f'},
      {'trialNum': 6, 'trial_type': 1, 'images': 'images/target/money_6.jpg', 'corrAns': 'f'},
      {'trialNum': 7, 'trial_type': 1, 'images': 'images/target/money_7.jpg', 'corrAns': 'f'},
      {'trialNum': 8, 'trial_type': 1, 'images': 'images/target/money_8.jpg', 'corrAns': 'f'},
      {'trialNum': 9, 'trial_type': 2, 'images': 'images/target/money_16.jpg', 'corrAns': 'j'},
      {'trialNum': 10, 'trial_type': 2, 'images': 'images/target/money_17.jpg', 'corrAns': 'j'},
      {'trialNum': 11, 'trial_type': 2, 'images': 'images/target/money_18.jpg', 'corrAns': 'j'},
      {'trialNum': 12, 'trial_type': 2, 'images': 'images/target/money_19.jpg', 'corrAns': 'j'},
      {'trialNum': 13, 'trial_type': 2, 'images': 'images/target/money_20.jpg', 'corrAns': 'j'},
      {'trialNum': 14, 'trial_type': 2, 'images': 'images/target/money_21.jpg', 'corrAns': 'j'},
      {'trialNum': 15, 'trial_type': 2, 'images': 'images/target/money_22.jpg', 'corrAns': 'j'},
      {'trialNum': 16, 'trial_type': 2, 'images': 'images/target/money_23.jpg', 'corrAns': 'j'},
      {'trialNum': 17, 'trial_type': 3, 'images': 'images/target/no-money_1.jpg', 'corrAns': 'f'}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
    Routine MID1_encode
    Routine MID1_feedback
    Routine MID1_ITI
  LoopTerminator MID1_trials
  Routine MID1_rest
  Routine SID_pra
  LoopInitiator SIDprac_loop loopType="TrialHandler"
    conditionsFile = practice/pra_SID.xlsx
    loopType = sequential
    nReps = 999
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    conditions:
      [{'trialNum': 1, 'trial_type': 5, 'pra_images1': 'practice/pra_images/1_1.jpg', 'corrAns': 'f'},
      {'trialNum': 2, 'trial_type': 6, 'pra_images1': 'practice/pra_images/1_2.jpg', 'corrAns': 'f'},
      {'trialNum': 3, 'trial_type': 7, 'pra_images1': 'practice/pra_images/1_3.jpg', 'corrAns': 'j'},
      {'trialNum': 4, 'trial_type': 8, 'pra_images1': 'practice/pra_images/1_4.jpg', 'corrAns': 'j'},
      {'trialNum': 5, 'trial_type': 5, 'pra_images1': 'practice/pra_images/1_5.jpg', 'corrAns': 'j'},
      {'trialNum': 6, 'trial_type': 6, 'pra_images1': 'practice/pra_images/1_6.jpg', 'corrAns': 'f'}]
    Routine Spra_encode
    Routine Spra_feedback
    Routine Spra_ITI
    Routine S_interval
  LoopTerminator SIDprac_loop
  Routine SID1_instru
  LoopInitiator SID1_trials loopType="TrialHandler"
    conditionsFile = SID.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'trialNum': 1, 'trial_type': 5, 'images': 'images/target/smile_1.jpg', 'corrAns': 'f', 'feed': 'images/SID/1.jpg', 'no_reward': 'images/SID_neutral_1/1_17.jpg'},
      {'trialNum': 2, 'trial_type': 5, 'images': 'images/target/smile_2.jpg', 'corrAns': 'f', 'feed': 'images/SID/2.jpg', 'no_reward': 'images/SID_neutral_1/1_18.jpg'},
      {'trialNum': 3, 'trial_type': 5, 'images': 'images/target/smile_3.jpg', 'corrAns': 'f', 'feed': 'images/SID/3.jpg', 'no_reward': 'images/SID_neutral_1/1_19.jpg'},
      {'trialNum': 4, 'trial_type': 5, 'images': 'images/target/smile_4.jpg', 'corrAns': 'f', 'feed': 'images/SID/4.jpg', 'no_reward': 'images/SID_neutral_1/1_20.jpg'},
      {'trialNum': 5, 'trial_type': 5, 'images': 'images/target/smile_5.jpg', 'corrAns': 'f', 'feed': 'images/SID/5.jpg', 'no_reward': 'images/SID_neutral_1/1_21.jpg'},
      {'trialNum': 6, 'trial_type': 5, 'images': 'images/target/smile_6.jpg', 'corrAns': 'f', 'feed': 'images/SID/6.jpg', 'no_reward': 'images/SID_neutral_1/1_22.jpg'},
      {'trialNum': 7, 'trial_type': 5, 'images': 'images/target/smile_7.jpg', 'corrAns': 'f', 'feed': 'images/SID/7.jpg', 'no_reward': 'images/SID_neutral_1/1_23.jpg'},
      {'trialNum': 8, 'trial_type': 5, 'images': 'images/target/smile_8.jpg', 'corrAns': 'f', 'feed': 'images/SID/8.jpg', 'no_reward': 'images/SID_neutral_1/1_24.jpg'},
      {'trialNum': 9, 'trial_type': 6, 'images': 'images/target/smile_16.jpg', 'corrAns': 'j', 'feed': 'images/SID/9.jpg', 'no_reward': 'images/SID_neutral_1/1_25.jpg'}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
    Routine SID1_encode
    Routine SID1_feedback
    Routine SID1_ITI
  LoopTerminator SID1_trials
  Routine SID_rest
  Routine MID2_instr
  LoopInitiator MID2_trials loopType="TrialHandler"
    conditionsFile = MID2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'trialNum': 1, 'trial_type': 1, 'images': 'images/target/money_9.jpg', 'corrAns': 'f'},
      {'trialNum': 2, 'trial_type': 1, 'images': 'images/target/money_10.jpg', 'corrAns': 'f'},
      {'trialNum': 3, 'trial_type': 1, 'images': 'images/target/money_11.jpg', 'corrAns': 'f'},
      {'trialNum': 4, 'trial_type': 1, 'images': 'images/target/money_12.jpg', 'corrAns': 'f'},
      {'trialNum': 5, 'trial_type': 1, 'images': 'images/target/money_13.jpg', 'corrAns': 'f'},
      {'trialNum': 6, 'trial_type': 1, 'images': 'images/target/money_14.jpg', 'corrAns': 'f'},
      {'trialNum': 7, 'trial_type': 1, 'images': 'images/target/money_15.jpg', 'corrAns': 'f'},
      {'trialNum': 8, 'trial_type': 1, 'images': 'images/target/money_31.jpg', 'corrAns': 'f'},
      {'trialNum': 9, 'trial_type': 2, 'images': 'images/target/money_24.jpg', 'corrAns': 'j'},
      {'trialNum': 10, 'trial_type': 2, 'images': 'images/target/money_25.jpg', 'corrAns': 'j'},
      {'trialNum': 11, 'trial_type': 2, 'images': 'images/target/money_26.jpg', 'corrAns': 'j'},
      {'trialNum': 12, 'trial_type': 2, 'images': 'images/target/money_27.jpg', 'corrAns': 'j'},
      {'trialNum': 13, 'trial_type': 2, 'images': 'images/target/money_28.jpg', 'corrAns': 'j'},
      {'trialNum': 14, 'trial_type': 2, 'images': 'images/target/money_29.jpg', 'corrAns': 'j'},
      {'trialNum': 15, 'trial_type': 2, 'images': 'images/target/money_30.jpg', 'corrAns': 'j'},
      {'trialNum': 16, 'trial_type': 2, 'images': 'images/target/money_32.jpg', 'corrAns': 'j'}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
    Routine MID2_encode
    Routine MID2_feed
    Routine MID2_ITI_2
  LoopTerminator MID2_trials
  Routine REST3
  Routine SID2_instr
  LoopInitiator SID_trial2 loopType="TrialHandler"
    conditionsFile = SID2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'trialNum': 1, 'trial_type': 5, 'images': 'images/target/smile_9.jpg', 'corrAns': 'f', 'feedback': 'images/SID/17.jpg', 'no_reward': 'images/SID_neutral/1_1.jpg'},
      {'trialNum': 2, 'trial_type': 5, 'images': 'images/target/smile_10.jpg', 'corrAns': 'f', 'feedback': 'images/SID/18.jpg', 'no_reward': 'images/SID_neutral/1_2.jpg'},
      {'trialNum': 3, 'trial_type': 5, 'images': 'images/target/smile_11.jpg', 'corrAns': 'f', 'feedback': 'images/SID/19.jpg', 'no_reward': 'images/SID_neutral/1_3.jpg'},
      {'trialNum': 4, 'trial_type': 5, 'images': 'images/target/smile_12.jpg', 'corrAns': 'f', 'feedback': 'images/SID/20.jpg', 'no_reward': 'images/SID_neutral/1_4.jpg'},
      {'trialNum': 5, 'trial_type': 5, 'images': 'images/target/smile_13.jpg', 'corrAns': 'f', 'feedback': 'images/SID/21.jpg', 'no_reward': 'images/SID_neutral/1_5.jpg'},
      {'trialNum': 6, 'trial_type': 5, 'images': 'images/target/smile_14.jpg', 'corrAns': 'f', 'feedback': 'images/SID/22.jpg', 'no_reward': 'images/SID_neutral/1_6.jpg'},
      {'trialNum': 7, 'trial_type': 5, 'images': 'images/target/smile_15.jpg', 'corrAns': 'f', 'feedback': 'images/SID/23.jpg', 'no_reward': 'images/SID_neutral/1_7.jpg'},
      {'trialNum': 8, 'trial_type': 5, 'images': 'images/target/smile_34.jpg', 'corrAns': 'f', 'feedback': 'images/SID/24.jpg', 'no_reward': 'images/SID_neutral/1_8.jpg'},
      {'trialNum': 9, 'trial_type': 6, 'images': 'images/target/smile_24.jpg', 'corrAns': 'j', 'feedback': 'images/SID/25.jpg', 'no_reward': 'images/SID_neutral/1_9.jpg'}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
    Routine SID2_enc
    Routine SID2_fee
    Routine SID2_ITI
  LoopTerminator SID_trial2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = JY.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'trialNum': 1, 'trial_type': 5, 'images': 'images/jinyin/2_1.jpg', 'corrAns': 'f', 'fee': 'images/jinyin/smile.jpg', 'no_re': 'images/jinyin/no/feedback2_1.jpg'},
      {'trialNum': 2, 'trial_type': 7, 'images': 'images/jinyin/2_2.jpg', 'corrAns': 'j', 'fee': 'images/jinyin/feedback2_1.jpg', 'no_re': 'images/jinyin/no/feedback2_2.jpg'},
      {'trialNum': 3, 'trial_type': 8, 'images': 'images/jinyin/2_3.jpg', 'corrAns': 'j', 'fee': 'images/jinyin/feedback2_2.jpg', 'no_re': 'images/jinyin/no/feedback2_3.jpg'}]
    Routine jin_encd
    Routine jin_feed
    Routine jinITI
  LoopTerminator trials_2
  Routine thanks
